(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingImageDimension 3)
(UseDirectionCosines "true")

// **************** Main Components **************************

(Registration "MultiResolutionRegistration")
(Interpolator "BSplineInterpolator")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")

(Optimizer "AdaptiveStochasticGradientDescent")
(Transform "EulerTransform")
(Metric "AdvancedMattesMutualInformation")

// ***************** Transformation **************************

(AutomaticScalesEstimation "true")
(AutomaticTransformInitialization "true")
(HowToCombineTransforms "Compose")

// ******************* Similarity measure *********************

(NumberOfHistogramBins 64)
(ErodeMask "false")

// ******************** Multiresolution **********************

(NumberOfResolutions 3)
(ImagePyramidSchedule 8 8 2  4 4 1  1 1 0.5 )

// ******************* Optimizer ****************************

(MaximumNumberOfIterations 500)
(MaximumStepLength 1.0)
(RequiredRatioOfValidSamples 0.05)

// **************** Image sampling **********************

(NumberOfSpatialSamples 2000)
(NewSamplesEveryIteration "true")
(ImageSampler "Random")

// ************* Interpolation and Resampling ****************

(BSplineInterpolationOrder 1)
(FinalBSplineInterpolationOrder 0)

(DefaultPixelValue 0)
(WriteResultImage "true")
(ResultImagePixelType "short")
(ResultImageFormat "nii.gz")
